;seldigpzs2d
;avance-version (10/12/07)
;1D homonuclear Hartman-Hahn transfer using 
;   DIPSI2 sequence for mixing
;   using selective refocussing with a shaped pulse
;with zero quantum suppression
;

; Version that allows to record selTOCSY with various spin lock mixing times and store these in a 2D data format;
; Made by merging t1ir elements with original selmlgp sequence
; J. Martins & Y. Dandois 14/11/2016

; Davy Sinnaeve : modified statement for ZQS to avoid error 

;H. Kessler, H. Oschkinat, C. Griesinger & W. Bermel,
;   J. Magn. Reson. 70, 106 (1986)
;J. Stonehouse, P. Adell, J. Keeler & A.J. Shaka, J. Am. Chem. Soc 116,
;   6037 (1994)
;K. Stott, J. Stonehouse, J. Keeler, T.L. Hwang & A.J. Shaka,
;   J. Am. Chem. Soc 117, 4199-4200 (1995)
;M.J. Thrippleton & J. Keeler,
;   Angew. Chem. Int. Ed. 42, 3938-3941 (2003)
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=



#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"FACTOR1=(d9/(p6*115.112))/2"
"l1=FACTOR1*2"

"spoff29=0"
"spoff30=0"
"d11=30m"

#   ifdef CALC_SPOFFS
"spoff2=bf1*(cnst21/1000000)-o1"
#   else
#   endif /*CALC_SPOFFS*/



"acqt0=-p1*2/PI"


1 ze
  20u fq1:f1
  2000m
2 30m
  20u pl1:f1 BLKGRAD
  d1
  50u UNBLKGRAD
  (p1 ph1):f1
  3u
  p16:gp1
  d16 pl0:f1
  p12:sp2:f1 ph2:r
  3u
  p16:gp1
  d16 pl1:f1

  p1 ph3
  10u
  ( center (p32:sp29 ph3):f1 (p32:gp10) )
  d16
  10u  pl10:f1

						;begin DIPSI2
4 p6*3.556 ph23
  p6*4.556 ph25
  p6*3.222 ph23
  p6*3.167 ph25
  p6*0.333 ph23
  p6*2.722 ph25
  p6*4.167 ph23
  p6*2.944 ph25
  p6*4.111 ph23
  
  p6*3.556 ph25
  p6*4.556 ph23
  p6*3.222 ph25
  p6*3.167 ph23
  p6*0.333 ph25
  p6*2.722 ph23
  p6*4.167 ph25
  p6*2.944 ph23
  p6*4.111 ph25

  p6*3.556 ph25
  p6*4.556 ph23
  p6*3.222 ph25
  p6*3.167 ph23
  p6*0.333 ph25
  p6*2.722 ph23
  p6*4.167 ph25
  p6*2.944 ph23
  p6*4.111 ph25

  p6*3.556 ph23
  p6*4.556 ph25
  p6*3.222 ph23
  p6*3.167 ph25
  p6*0.333 ph23
  p6*2.722 ph25
  p6*4.167 ph23
  p6*2.944 ph25
  p6*4.111 ph23
  lo to 4 times c
						;end DIPSI2

  p16:gp2
  d16
  10u
  ( center (p32*0.75:sp29 ph3):f1 (p32:gp11) )
  d16
  10u pl1:f1
  p1 ph3
  
  go=2 ph31
  ;30m mc #0 to 2 F0(zd) ;YDEdit - commented line
  d11 wr #0 if #0 ivc	;YDEdit - write to disk
  lo to 1 times td2	;YDEdit - added loop counter for 2d
  20u BLKGRAD
exit


ph1=0 2 
ph2=0 0 1 1 2 2 3 3
ph3=0
ph23=3
ph25=1
ph29=0
ph31=0 2 2 0


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;sp2: f1 channel - shaped pulse
;sp29: f1 channel - shaped pulse (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p6 : f1 channel -  90 degree low power pulse
;p12: f1 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                       [1 msec]
;p32: f1 channel - 180 degree shaped pulse (adiabatic)    [20 msec]
;     smoothed chirp (sweepwidth, 20% smoothing, 10000 points)
;p34: f1 channel - 180 degree shaped pulse (adiabatic)    [15 msec]
;     smoothed chirp (sweepwidth, 20% smoothing, 10000 points)
;d1 : relaxation delay; 1-5 * T1
;d9 : TOCSY mixing time
;d16: delay for homospoil/gradient recovery
;cnst21: chemical shift for selective pulse (offset, in ppm)
;l1: loop for DIPSI cycle: ((p6*115.112) * l1) = mixing time
;NS: 8 * n, total number of scans: NS * TD0
;DS: 4
;pl9: f1 channel - power level for presaturation

;phcor 2 : phasedifference between power levels sp1 and pl1

;choose p12 according to desired selectivity
;the flip-angle is determined by the amplitude
;set O1 on resonance on the multiplet to be excited or use spoffs


;for z-only gradients:
;gpz10: ca. 11%
;gpz11: ca. 11% * 4/3
;gpz1: 15%
;gpz2: 31%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam10: RECT.1
;gpnam11: RECT.1


;for sweepwidth of adiabatic shape and adjusting gpz0
;   see supplementary material of M.J. Thrippleton & J. Keeler,
;   Angew. Chem. Int. Ed. 42, 3938-3941 (2003)



;$Id: seldigpzs,v 1.2.2.1 2011/01/11 10:56:55 ber Exp $
